PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = paired-associates
  logging level = debug
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Routines
  Routine check
    TextComponent here
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = here
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  Routine Instr1
    TextComponent InstrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this task you have to remember a series of word pairs.

        During each block a series of word pairs will appear in the middle of the screen.

        Each word pair will be presented for 2 seconds before moving onto the next pair.


        [Press “SPACE” to continue]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        // default values
        var word1 = "";
        var word2 = "";
  Routine Instr2
    TextComponent example
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After viewing 10 word pairs you must recall the BOTTOM word for each pair.

        The pairs will not be presented in the same order in which you saw them originally.

        When it is time to recall the words, you will see the top word with “???” underneath. You will then type in the corresponding bottom word when the cursor appears.

        You will have 5 seconds to type in the correct response. Press the ‘ENTER’ key once you have typed in your response.


        [Press “SPACE” to continue]
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr3
    TextComponent practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let’s try a practice block with 3 word pairs.


        [Press “SPACE” to continue]
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ready_
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press ‘SPACE’ to start the block
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prime_trial
    TextComponent top_word
      letterHeight = 0.05
      pos = (0, .05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word1
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    TextComponent bot_word
      letterHeight = 0.05
      pos = (0, -.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word2
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine probe_trial
    TextComponent top_text
      letterHeight = 0.05
      pos = (0, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $word1
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    TextboxComponent probe_text
      bold = True
      editable = True
      letterHeight = 0.05
      lineSpacing = 0
      pos [set every repeat] = (.35, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent submit
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Practice
    TextComponent top_practice
      letterHeight = 0.1
      pos = (0, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word1
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    TextComponent bottom_practice
      letterHeight = 0.1
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word2
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    PolygonComponent fix_practice
      fillColor = white
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine practice_probe
    TextComponent top
      letterHeight = 0.1
      pos = (0, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $word1
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    TextboxComponent practiceprobe
      bold = False
      editable = True
      letterHeight = 0.05
      pos [set every repeat] = (.35, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent submit_practice
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine start
    TextComponent ready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Ready to start the actual task?

        Press [‘SPACE’ to begin]
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instr1
  Routine Instr2
  Routine Instr3
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice_words.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word1': 'mouse', 'word2': 'tree'},
      {'word1': 'fork', 'word2': 'task'},
      {'word1': 'trash', 'word2': 'desk'}]
    Routine Practice
  LoopTerminator practice_trials
  LoopInitiator practice_resp loopType="TrialHandler"
    conditionsFile = practice_words.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'word1': 'mouse', 'word2': 'tree'},
      {'word1': 'fork', 'word2': 'task'},
      {'word1': 'trash', 'word2': 'desk'}]
    Routine practice_probe
  LoopTerminator practice_resp
  Routine start
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = block_files.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'file_name': 'block1.xlsx'},
      {'file_name': 'block2.xlsx'},
      {'file_name': 'block3.xlsx'}]
    Routine Ready_
    LoopInitiator prime_loop loopType="TrialHandler"
      conditionsFile = $file_name
      loopType = random
      nReps = 1
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      Routine prime_trial
    LoopTerminator prime_loop
    LoopInitiator probe_loop loopType="TrialHandler"
      conditionsFile = $file_name
      isTrials = False
      loopType = random
      nReps = 1
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      Routine probe_trial
    LoopTerminator probe_loop
  LoopTerminator blocks
